CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*FK223_run_(?P<Run>[A-Z]+)_PLATE_(?P<Plate>[0-9]+)_ID_(?P<ID>[A-Z][0-9]+)_.*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "Masks Brachyury") (directory does contain "72")
    Name to assign these images:_72h_brachyury_mask
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    Select the image type:Binary mask
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    Select the rule criteria:and (directory does contain "Focussed") (directory does contain "72")
    Name to assign these images:_72h_brachyury_original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Masks Brightfield") (directory does contain "72")
    Name to assign these images:_72h_brightfield_mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:_72h_brachyury_original
    Name the output image:bra_rescaled_72h
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,255
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
ConvertImageToObjects:[module_num:6|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
    Select the input image:_72h_brachyury_mask
    Name the output object:BRA_Object_72h
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:1

ConvertImageToObjects:[module_num:7|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
    Select the input image:_72h_brightfield_mask
    Name the output object:BF_Object_72h
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:1

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:_72h_brachyury_original
    Select objects to measure:BF_Object_72h, BRA_Object_72h

MeasureObjectIntensityDistribution:[module_num:9|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
    Select images to measure:_72h_brachyury_original
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:BRA_Object_72h
    Object to use as center?:These objects
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    Select objects to measure:BF_Object_72h
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:9
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:BRA_Object_72h
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive\\Documents\\PhD Jesse\\Embryonic_organoid_prediction\\Processing dataset for Paper\\TLS_2D_morphostate_investigation\\tabular_data\\Cellprofiler_Data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:BRA_Object_72h|RadialDistribution_MeanFrac__72h_brachyury_original_3of9,BRA_Object_72h|RadialDistribution_MeanFrac__72h_brachyury_original_7of9,BRA_Object_72h|RadialDistribution_MeanFrac__72h_brachyury_original_8of9,BRA_Object_72h|RadialDistribution_MeanFrac__72h_brachyury_original_5of9,BRA_Object_72h|RadialDistribution_MeanFrac__72h_brachyury_original_4of9,BRA_Object_72h|RadialDistribution_MeanFrac__72h_brachyury_original_9of9,BRA_Object_72h|RadialDistribution_MeanFrac__72h_brachyury_original_1of9,BRA_Object_72h|RadialDistribution_MeanFrac__72h_brachyury_original_2of9,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20230406_BRA_intensity_measures_
    Overwrite existing files without warning?:Yes
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